OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client - openBci => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0xc73e83ec Temporal filter "Butterworth 60Hz"
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 59
  High cut frequency (Hz) = 61
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Temporal filter "Bandpass 1Hz - 62Hz" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 62
  Pass band ripple (dB) = 0.5
Input stream=#2 -> CSV File Writer "CVS - Write Filtered Data"
  Filename = D:/OneDrive - bwedu/Masterthesis/Experiments/Fahren+AimLab/2020_03_05_Propand_1_Markus/openBci_record-[$core{date}-$core{time}]_filtered_awake_aimlab.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#2, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#0.Signal stream -> CSV File Writer "CVS - Write RAW Data"
  Filename = D:/OneDrive - bwedu/Masterthesis/Experiments/Fahren+AimLab/2020_03_05_Propand_1_Markus/openBci_record-[$core{date}-$core{time}]_raw_awake_aimlab.csv
  Precision = 10
  Append data = false
  Only last matrix = false
