OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

CSV File Reader => #0
  Filename = D:/OneDrive - bwedu/Masterthesis/Experiments/P300_tests/openBci/1/openBci_record-[2020.03.05-12.10.42]_raw.csv
#0.Output stream -> 0xc73e83ec Temporal filter "Butterworth 50Hz"
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
-> 0xc73e83ec Temporal filter "Bandpass 1Hz - 62Hz" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 62
  Pass band ripple (dB) = 0.5
Input stream=#2, Stimulations stream=#0.Output stimulation -> CSV File Writer
  Filename = D:/OneDrive - bwedu/Masterthesis/Experiments/P300_tests/openBci/1/openBci_record_[$core{date}+$core{time}]_filtered.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#2, Stimulations=#0.Output stimulation -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
