OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Label_01 - frequent stimuli (80%)
  Label_02 - non-frequent stimuli (20%)
  Stimuli are presented every 2 seconds
  30 stimuli in 1 minute, 150 stimuli in 5 minutes
Comment
  Long tone for EC/EO change
Comment
  Different tones for frequent
  and non-frequent stimuli
Comment
  Save signal in .csv
Comment
  Save stimuli in .csv

0xc73e83ec Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream=#0.Signal stream -> CSV File Writer
  Filename = /media/rapha/Data/Masterthesis/EEG_Data/muse_data/openVibe/record-[$core{date}-$core{time}]_p300.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Auditory P300 protocol => #2
  Lua Script = /home/rapha/Desktop/eeg/Fatiga_protocolo_openvibe_final/p300-fatigue-protocol_v2.lua
  Number of trials = 120
  Frequent stim = OVTK_StimulationId_Label_01
  Non frequent stim = OVTK_StimulationId_Label_02
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 1
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 0
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 0.5
  End of Trial Maximum Duration (in sec) = 0.5
  Eyes Closed Stim = OVTK_GDF_EEG_Idling_EEG_Eyes_Closed
  Eyes Open Stim = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Eyes tasks duration = 30
-> Sound Player
  PLAY trigger = OVTK_GDF_EEG_Idling_EEG_Eyes_Closed
  STOP trigger = OVTK_GDF_Beep
  File to play = /home/rapha/Desktop/eeg/Fatiga_protocolo_openvibe_final/beep-11a_3s.wav
  Loop = false
#2 -> Sound Player
  PLAY trigger = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  STOP trigger = OVTK_GDF_Beep
  File to play = /home/rapha/Desktop/eeg/Fatiga_protocolo_openvibe_final/beep-11a_3s.wav
  Loop = false
#2 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_GDF_Beep
  File to play = /home/rapha/Desktop/eeg/Fatiga_protocolo_openvibe_final/beep_f.wav
  Loop = false
#2 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_GDF_Beep
  File to play = /home/rapha/Desktop/eeg/Fatiga_protocolo_openvibe_final/beep_nf.wav
  Loop = false
Input stream=#0.Signal stream, Stimulations stream=#2 -> CSV File Writer
  Filename = /media/rapha/Data/Masterthesis/EEG_Data/muse_data/openVibe/record-[$core{date}-$core{time}]_p300_with_stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Data=#0.Signal stream, Stimulations=#2 -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
